CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"C": "integer", "ChannelName": "text", "ColorFormat": "text", "FileLocation": "text", "Frame": "text", "Plate": "text", "Series": "text", "Site": "text", "SizeC": "integer", "SizeT": "text", "SizeX": "text", "SizeY": "text", "SizeZ": "text", "T": "text", "Well": "text", "Z": "text", "condition": "text", "side": "text"}
    Extraction method count:2
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (extension does istif)
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    Does cached metadata exist?:Yes
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<conce>.*)_(?P<change>.*)[0-9][0-9]
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does C "0")
    Name to assign these images:mRuby3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "1")
    Name to assign these images:pERK
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "2")
    Name to assign these images:Hoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (extension does ispng)
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    Name to assign these objects:mask
    Select the image type:Objects
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MeasureObjectSizeShape:[module_num:5|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
    Select object sets to measure:mask
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:6|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
    Select images to measure:mRuby3, pERK
    Select objects to measure:mask

OverlayOutlines:[module_num:7|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:mRuby3
    Name the output image:OrigOverlay
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Thick
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    Select objects to display:mask

SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:mRuby3
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|2023-04-24\\outlines
    Image bit depth:No conversion
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:9|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|2023-04-24\\csv
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Metadata_Well,Image|Group_Number,Image|Group_Length,Image|Group_Index,Image|Count_mask,mask|Intensity_MeanIntensity_pERK,mask|Intensity_MeanIntensity_mRuby3,mask|Intensity_MedianIntensity_pERK,mask|Intensity_MedianIntensity_mRuby3,mask|Intensity_MeanIntensityEdge_mRuby3,mask|Intensity_MeanIntensityEdge_pERK,mask|Intensity_IntegratedIntensity_pERK,mask|Location_Center_X,mask|Location_Center_Y,mask|Number_Object_Number,mask|AreaShape_Area,mask|AreaShape_Solidity,mask|AreaShape_Eccentricity
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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